PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sonority
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating!

        Instructions will go here
    KeyboardComponent instrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trainquestions1
    SoundComponent sound_1
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent correct
      image [set every repeat] = $imageLoc
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect
      image [set every repeat] = $imageLoc
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    MouseComponent mouse
      clickable = correct, incorrect
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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  Routine train1
    SoundComponent stimulitrain1r1
      sound [set every repeat] = $audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    ImageComponent image
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine test
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = loop
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  Routine exit
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        exited
  Routine instr2
    TextComponent notice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Next part will automaticall start in 3 minutes.
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  Routine train2
  Routine trainquestions2
Flow
  Routine instr
  LoopInitiator train1blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train1LoopCondition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condFiles', 'train1Block1Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block2Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block3Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block4Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block5Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block6Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block7Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block8Condition.xlsx')]),
      OrderedDict([('condFiles', 'train1Block9Condition.xlsx')])]
    LoopInitiator testloop loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train1
    LoopTerminator testloop
    Routine trainquestions1
  LoopTerminator train1blocks
  Routine instr2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine train2
    Routine trainquestions2
  LoopTerminator trials
